PsychoPy2experiment version="3.2.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = vvk
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Routines
  Routine the_end
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The end.

        Data + recordings are in folder data/
  Routine Instructions
    CodeComponent init
      Code Type = Py
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=32)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
        import ctypes
        xlib = ctypes.cdll.LoadLibrary("libX11.so")
        xlib.XInitThreads()


        import sounddevice as sd
        from scipy.io.wavfile import write
    TextComponent instruction_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0
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      text:
        Welcome to participate our experiment: causal prediction model for non-invasive brain stimulation

        Task introductrion:
    KeyboardComponent key_resp_instruction
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    TextComponent cont_instruction
      letterHeight = 0.06
      pos = [0.5, -0.3]
      startVal [time (s)] = 5
      text = Press [space] key to continue.
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  Routine Pause
    KeyboardComponent Pause_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Pause_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      text [set every repeat] = Press [space] key to continue.
      wrapWidth = 1.5
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  Routine Cali_de_pre_intro
    TextComponent Cali_de_pre_intro_title
      letterHeight = 0.06
      pos = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 23
      text = READ OUT BLOCK (GERMAN)
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    TextComponent Cali_de_pre_intro_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 23
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      text:
        1. Several sentences written in German on the screen, and please read out them loudly after hearing an increasing tonal beeping sound.
        2. A decreasing tonal beeping sound indicates the recording is finished.
    SoundComponent Cali_de_pre_intro_audio
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/cali_de.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 23
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    KeyboardComponent Cali_de_pre_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 23
      store = nothing
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    TextComponent Cali_de_pre_intro_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 23
      text [set every frame] = Press [space] key to continue.
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  Routine Cali_de_pre_rec
    TextComponent Cali_de_pre_rec_text
      letterHeight = 0.06
      pos = (0.5, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Hallo, Ich bin Chen aus Wien.
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    SoundComponent Cali_de_pre_rec_beep_hint
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C5_A_tone_flat_half_s.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
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    SoundComponent Cali_de_pre_rec_beep_start
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C3A_C4A_tone_decrease_1s.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 1
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    CodeComponent Cali_de_pre_rec_record
      Code Type = Py
      Begin Routine:
        # Create a voice-key to be used:
        file_name ='data/rec_cali_de_pre.wav'
        fs = 44100  # Sample rate
        seconds = 20  # Duration of recording

        myrecording = sd.rec(int(seconds * fs), samplerate=fs, channels=2)
        #  sd.wait()  # Wait until recording is finished
      Each Frame:
        # Nothing needed every frame for this demo
      End Routine:
        write(file_name, fs, myrecording)  # Save as WAV file
        # Add the detected time into the PsychoPy data file:
        # thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        # thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', file_name)
        thisExp.nextEntry()
    SoundComponent Cali_de_pre_rec_beep_end
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C4A_C3A_tone_decrease_1s.wav
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1
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    KeyboardComponent Cali_de_pre_rec_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      store = nothing
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    TextComponent Cali_de_pre_rec_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 20
      text = Press [space] key to continue.
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  Routine Cali_de_post_intro
    TextComponent Cali_de_post_intro_title
      letterHeight = 0.06
      pos = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 23
      text = READ OUT BLOCK (GERMAN)
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    TextComponent Cali_de_post_intro_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 23
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      text:
        1. Several sentences written in German on the screen, and please read out them loudly after hearing an increasing tonal beeping sound.
        2. A decreasing tonal beeping sound indicates the recording is finished.
    SoundComponent Cali_de_post_intro_audio
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/cali_de.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 23
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    KeyboardComponent Cali_de_post_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 23
      store = nothing
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    TextComponent Cali_de_post_intro_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 23
      text [set every frame] = Press [space] key to continue.
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  Routine Cali_de_post_rec
    TextComponent Cali_de_post_rec_text
      letterHeight = 0.06
      pos = (0.5, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Hallo, Ich bin Chen aus Wien.
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    SoundComponent Cali_de_post_rec_beep_hint
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C5_A_tone_flat_half_s.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
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    SoundComponent Cali_de_post_rec_beep_start
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C3A_C4A_tone_decrease_1s.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 1
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    CodeComponent Cali_de_post_rec_record
      Code Type = Py
      Begin Routine:
        # Create a voice-key to be used:
        file_name ='data/rec_cali_de_pre.wav'
        fs = 44100  # Sample rate
        seconds = 20  # Duration of recording

        myrecording = sd.rec(int(seconds * fs), samplerate=fs, channels=2)
        #  sd.wait()  # Wait until recording is finished
      Each Frame:
        # Nothing needed every frame for this demo
      End Routine:
        write(file_name, fs, myrecording)  # Save as WAV file
        # Add the detected time into the PsychoPy data file:
        # thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        # thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', file_name)
        thisExp.nextEntry()
    SoundComponent Cali_de_post_rec_beep_end
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C4A_C3A_tone_decrease_1s.wav
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1
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    KeyboardComponent Cali_de_post_rec_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      store = nothing
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    TextComponent Cali_de_post_rec_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 20
      text = Press [space] key to continue.
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  Routine RS_rec
    TextComponent RS_rec_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text:
        Please keep relaxed and open your eyes.
        Note: Blinking is allowed.
    CodeComponent RS_rec_trigger
      Code Type = Py
      Begin Routine:
        print("sending trigger 1")
      End Routine:
        print("sending trigger 0")
    KeyboardComponent RS_rec_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10
      store = nothing
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    TextComponent RS_rec_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 10
      text = Press [space] key to continue.
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  Routine QA_intro
    TextComponent QA_intro_title
      letterHeight = 0.06
      pos = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 32
      text = Q&A BLOCK
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    TextComponent QA_intro_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 32
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      text:
        1. You will hear one German sentence with a censored missing word in every trial and you are expected to fill this sentence.
        2. These sentences will be played after a flat tonal beeping.
        3. You should speak out your answer after hearing an increasing tonal beeping.
        4. A decreasing tonal beeping sound indicates this trial is finished.
    SoundComponent QA_intro_audio
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/q_a/q_a.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 32
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    KeyboardComponent QA_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 32
      store = nothing
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    TextComponent QA_intro_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 32
      text [set every frame] = Press [space] key to continue.
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  Routine QA_rec
    TextComponent QA_rec_text
      letterHeight = 0.06
      pos = (0.5, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
      text = Listening to the question and speaking out your answer!
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    SoundComponent QA_rec_beep_hint
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C5_A_tone_flat_half_s.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
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    SoundComponent QA_rec_question
      sound = ../../../../Data/NIBS/Stage_one/Audio/Database/article_0/sentence_0/sentence_0_syn.wav
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 14.4
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    SoundComponent QA_rec_beep_start
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C3A_C4A_tone_decrease_1s.wav
      startVal [time (s)] = 15
      stopVal [duration (s)] = 1
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    CodeComponent QA_rec_record
      Code Type = Py
      Begin Routine:
        # Create a voice-key to be used:
        file_name ='data/rec_QA_pre_block_'+ str(QA_pre_block.thisN).zfill(3) + '_trial_' + str(pre_trial.thisN).zfill(3)  + '.wav'
        fs = 44100  # Sample rate
        seconds = 30  # Duration of recording

        myrecording = sd.rec(int(seconds * fs), samplerate=fs, channels=2)
        #  sd.wait()  # Wait until recording is finished
      Each Frame:
        # Nothing needed every frame for this demo
      End Routine:
        write(file_name, fs, myrecording)  # Save as WAV file
        # Add the detected time into the PsychoPy data file:
        # thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        # thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', file_name)
        thisExp.nextEntry()
    SoundComponent QA_rec_beep_end
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/calibration/C4A_C3A_tone_decrease_1s.wav
      startVal [time (s)] = 24
      stopVal [duration (s)] = 1
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    TextComponent QA_rec_break
      letterHeight = 0.06
      pos = [0.5,0]
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5.0
      text = Short break
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  Routine RS_intro
    TextComponent RS_intro_title
      letterHeight = 0.06
      pos = [0.5, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
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      text:
        REST STATE BLOCK
    TextComponent RS_intro_text
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
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      text:
        1. Please remain seated and keep relaxed while opening your eyes.
        2. A decreasing tonal beeping sound will be played to indicate this block is finished
    SoundComponent RS_intro_audio_close
      sound = ../../../../Data/NIBS/Stage_one/Audio/Soundeffect/resting_state/rs_close.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
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    KeyboardComponent RS_intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 14
      store = nothing
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    TextComponent RS_intro_cont
      letterHeight = 0.06
      pos = [0.5, 0]
      startVal [time (s)] = 14
      text = Press [space] key to continue.
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Flow
  Routine Instructions
  Routine Cali_de_pre_intro
  Routine Cali_de_pre_rec
  LoopInitiator run loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine RS_intro
    Routine RS_rec
    Routine QA_intro
    LoopInitiator QA_pre_block loopType="TrialHandler"
      loopType = random
      nReps = 2
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      LoopInitiator pre_trial loopType="TrialHandler"
        loopType = random
        nReps = 3
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        Routine QA_rec
      LoopTerminator pre_trial
      Routine Pause
    LoopTerminator QA_pre_block
  LoopTerminator run
  Routine Cali_de_post_intro
  Routine Cali_de_post_rec
  Routine the_end
